PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = $[0,0,0]
  colorSpace = hsv
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = ling
  Screen = 1
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Routines
  Routine trial
    TextComponent sentence1
      color = $[1.000,1.000,-1.000]
      text [set every repeat] = $S1
      stopVal [duration (s)] = 90
      pos = (0, 0.6)
      startVal [time (s)] = 0.5
      letterHeight = 0.05
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    TextComponent sentence6
      color = $[1.000,1.000,-1.000]
      text [set every repeat] = $S6
      stopVal [duration (s)] = 90
      pos = (0, 0.5)
      startVal [time (s)] = 0.5
      letterHeight = 0.05
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    TextComponent sentence2
      text [set every repeat] = $P
      stopVal [duration (s)] = 90
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      letterHeight = 0.05
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    TextComponent sentence3
      text [set every repeat] = $Q
      stopVal [duration (s)] = 90
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      letterHeight = 0.05
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    TextComponent sentence4
      text [set every repeat] = $R
      stopVal [duration (s)] = 90
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      letterHeight = 0.05
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    TextComponent sentence5
      text [set every repeat] = $S
      stopVal [duration (s)] = 90
      pos = (0, -0.3)
      startVal [time (s)] = 0.5
      letterHeight = 0.05
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    KeyboardComponent answers
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 90
      forceEndRoutine = False
      allowedKeys = 'p','q','r','s'
      startVal [time (s)] = 0.5
      store = all keys
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    KeyboardComponent exit
      stopVal [duration (s)] = 90
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
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  Routine Instructions
    TextComponent instruct
      colorSpace = hsv
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The jumbled sentences are to be aranged in a order that seems chronologically right.

        Select the letter corresponding to the correct order on the keyboard.
    KeyboardComponent resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'S1': u'S1\xa0: As the icebergs drift away from the poles towards warmer water, they often invade the path of ships and sometimes, tiles of fog cause fearful collisions. ', 'S6': u'S6\xa0: More than fifteen hundred lives were lost.', 'Q': u'Q : The Titanic was the largest ship in the world at that time.', 'P': u' P : Striking an iceberg without warning in the fog, she sank quickly.', 'S': u' S : The biggest disaster of this kind ever recorded was that of the Titanic on 14 April, 1912.', 'R': u'R : She was sailing on her maiden voyage from Southampton to New York with more than two thousand p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,
      {'S1': u'S1\xa0: The release of atomic energy is the greatest achievement which science has yet attained.', 'S6': u'S6\xa0: However, the scientists are gratified by the numerous applications of atomic energy for peaceful and constructive purpose.', 'Q': u'Q : The atom was split by physicists whose minds were set on the search for knowledge.', 'P': u'P : But the first invention to which their discoveries were applied was a bomb.', 'S': u'S : It is with this dread that scientists regard the first use to which their greatest discovery was put.', 'R': u'R : It was more deadly than any other weapon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,
      {'S1': u'S1\xa0: Human beings have the most common trait of airing their individual views and opinions.', 'S6': u'S6\xa0: A rigid and blind self-justification, though a common human weakness, will lead nowhere.', 'Q': u'Q : But we have to live in a society and co-operation is the basis of a civilization.', 'P': u'P : If everybody starts running after his own point of view without caring for others, civilization will soon perish.', 'S': u'S : What is essential to live happily in this world is a peaceful coexistence to live and let others live.', 'R': u'R : Everybody has a right to live and lead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,
      {'S1': u'S1\xa0:The north-eastern region presents a diverse system of habitats, ranging from tropical rain forests to alpine meadows.', 'S6': u'S6\xa0: The winter temperature in Shillong, for example, varies from 4\xb0C to 24\xb0 C; in Gangtok from 9\xb0C to 23\xb0C.', 'Q': u'Q : The temperature in the region varies with location, elevation, topography, rainfall and humidity.', 'P': u'P : In eastern Himalayas, the rainfall ranges from 125 to 300 cm; in Assam from 178 to 305 cm.', 'S': u'S : It is largely a humid tropical region with two periods of rainfall; the winter rains come from the west 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
    Routine trial
  LoopTerminator trials
